WorkflowBuilder(Version=2.8.1)
Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=2048, WriteSize=2048))

Bonsai.ONIX.NeuropixelsV1Device => #1
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
  EnableStream=true
  Configuration
    DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
    ConfigProbeSN=19454412891
    PerformReadCheck=true
    CalibrationFolderPath=C:\Users\Admin\Desktop\19454412891-20230913T100948Z-001\19454412891
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
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    ADCs
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=1, Coarse=3, Fine=0, Cfix=1, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=2, Coarse=3, Fine=1, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=5, Coarse=0, Fine=0, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=3, Coarse=2, Fine=1, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=6, Coarse=0, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=3, Coarse=1, Fine=2, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=1, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=2, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=4, Coarse=2, Fine=0, Cfix=8, Offset=1, Threshold=512)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=3, Coarse=2, Fine=1, Cfix=1, Offset=4, Threshold=512)
      NeuropixelsV1ADC(CompP=8, CompN=22, Slope=2, Coarse=3, Fine=1, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=27, CompN=3, Slope=3, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=513)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=6, Coarse=0, Fine=1, Cfix=8, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=3, Coarse=1, Fine=0, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=4, Coarse=1, Fine=2, Cfix=0, Offset=1, Threshold=513)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=2, Coarse=3, Fine=2, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=8, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=10, CompN=20, Slope=4, Coarse=1, Fine=0, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=2, Coarse=3, Fine=2, Cfix=1, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=6, Coarse=0, Fine=1, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=4, Coarse=2, Fine=0, Cfix=1, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=4, Coarse=1, Fine=3, Cfix=8, Offset=1, Threshold=512)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=4, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=6, Coarse=0, Fine=1, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=15, CompN=15, Slope=4, Coarse=2, Fine=0, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=4, Coarse=1, Fine=3, Cfix=0, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=2, Fine=3, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=6, Coarse=0, Fine=1, Cfix=1, Offset=3, Threshold=514)
  RequireSNMatch=false
  BlockSize=1
-> MemberSelector(Selector=SpikeData)
-> PublishSubject SpikeData
#1 -> MemberSelector(Selector=LFPData)
-> PublishSubject LfpData

BehaviorSubject<OpenCV.Net.Mat> AnalogOutput
-> Bonsai.ONIX.AnalogIODevice
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=6)
  BlockSize=1000
  DataType=Volts
  EnableStream=true
  InputRange00=TenVolts
  InputRange01=TenVolts
  InputRange02=TenVolts
  InputRange03=TenVolts
  InputRange04=TenVolts
  InputRange05=TenVolts
  InputRange06=TenVolts
  InputRange07=TenVolts
  InputRange08=TenVolts
  InputRange09=TenVolts
  InputRange10=TenVolts
  InputRange11=TenVolts
  Direction00=Output
  Direction01=Output
  Direction02=Output
  Direction03=Output
  Direction04=Output
  Direction05=Output
  Direction06=Output
  Direction07=Output
  Direction08=Output
  Direction09=Output
  Direction10=Output
  Direction11=Output
-> MemberSelector(Selector=Data)

SubscribeSubject SpikeData
-> DelaySubscription(DueTime=PT5S) => #10
ExternalizedMapping(Interval(DisplayName=AnalogUpdateInterval)) => #11
#10, #11 -> SampleInterval(Interval=PT1S)
-> GroupWorkflow SelectChannel => #13
    WorkflowInput Source1 => #0
    ExternalizedMapping(Value(DisplayName=ChannelIndex))
    -> PropertySource<Bonsai.Dsp.Submatrix,System.Int32>(MemberName=StartRow, Value=2) => #2
    -> PropertyMapping(StartRow) => #3
    #2 -> Add(Operand=IntProperty(Value=1))
    -> PropertyMapping(EndRow) => #5
    #0, #3, #5 -> Bonsai.Dsp.Submatrix(StartRow=2, EndRow=3, StartCol=0, EndCol=1)
    -> WorkflowOutput
Annotation => #14
  Text:
    Rescaling parameters depend on the input data type (for NPX will be U16) and the [gain settings applied for the channel](https://github.com/cortex-lab/neuropixels/wiki/Gain_settings)

    For example an input trace with U16 type can take values from 0-1023. With a gain setting of 1000x these values map onto -0.6V : 0.6V
#13, #14 -> Bonsai.Dsp.Rescale(Min=0, Max=1023, RangeMin=-0.6, RangeMax=0.6, RescaleType=Linear)
-> Bonsai.Dsp.ConvertScale(Depth=F64, Scale=1, Shift=0)
-> Bonsai.Dsp.Tile(RowTiles=1, ColumnTiles=12)
-> MulticastSubject AnalogOutput

SubscribeSubject LfpData
-> GroupWorkflow SelectChannel
    WorkflowInput Source1 => #0
    ExternalizedMapping(Value(DisplayName=ChannelIndex))
    -> PropertySource<Bonsai.Dsp.Submatrix,System.Int32>(MemberName=StartRow, Value=2) => #2
    -> PropertyMapping(StartRow) => #3
    #2 -> Add(Operand=IntProperty(Value=1))
    -> PropertyMapping(EndRow) => #5
    #0, #3, #5 -> Bonsai.Dsp.Submatrix(StartRow=2, EndRow=3, StartCol=0, EndCol=1)
    -> WorkflowOutput
-> Index(Operand=IntProperty(Value=0))

Bonsai.ONIX.MemoryUsageDevice(DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=10), EnableStream=true, UpdateHz=100)
-> MemberSelector(Selector=MemoryUsagePercentage)

SubscribeSubject SpikeData
-> TimeInterval
-> MemberSelector(Selector=Interval.TotalMilliseconds)
