<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" Category="Session Settings" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:LoadSettings">
          <p1:Path>C:\Users\neurogears\source\repos\vestibular-vr\src\sessionTemplate.yml</p1:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1080</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RngSeed</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RngSeed</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:CreateContinuousUniform">
          <p2:Lower>0</p2:Lower>
          <p2:Upper>1</p2:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>ProbabilitySampling</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Session start</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ExperimentEvents</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
        <rx:Name>ExperimentEvents</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <ClearColor>Gray</ClearColor>
        <Width>2048</Width>
        <Height>2048</Height>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <FaceSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FrontView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>30</Width>
              <Height>20</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RightView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>30</Width>
              <Height>20</Height>
              <Rotation>
                <X>0</X>
                <Y>-90.000002504478161</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.25</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BackView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>30</Width>
              <Height>20</Height>
              <Rotation>
                <X>0</X>
                <Y>180.00000500895632</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.5</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LeftView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>30</Width>
              <Height>20</Height>
              <Rotation>
                <X>0</X>
                <Y>90.000002504478161</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.75</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UnwrapTrialSequence</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Blocks</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>DoBlock</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Block</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Block</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Block started</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ExperimentEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BlockFinished</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ClosedLoopGratings</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                    <rx:Name>UpdateStmuli</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UpdateStmuli</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Block</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Stimulus.SpatialFrequency</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SpatialFrequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LeftPhaseProcession</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Phase" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>-90</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <ExtentX>180</ExtentX>
                    <ExtentY>60</ExtentY>
                    <SpatialFrequency>0.1</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>206.2648</Phase>
                    <Angle>0</Angle>
                    <SquareWave>false</SquareWave>
                    <Contrast>2</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>20</Aperture>
                    <Opacity>1</Opacity>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Block</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Stimulus.SpatialFrequency</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SpatialFrequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RightPhaseProcession</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Phase" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>90</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <ExtentX>180</ExtentX>
                    <ExtentY>60</ExtentY>
                    <SpatialFrequency>0.1</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>10106.9756</Phase>
                    <Angle>0</Angle>
                    <SquareWave>false</SquareWave>
                    <Contrast>2</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>20</Aperture>
                    <Opacity>1</Opacity>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="9" Label="Source1" />
                  <Edge From="3" To="15" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="9" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source3" />
                  <Edge From="9" To="16" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="15" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source3" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BlockFinished</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.RunGain</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Gain" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CalculatePhaseProcession</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Annotation">
                    <Name>DeltaSwitch</Name>
                    <Text><![CDATA[Used to globally control movement delta gain, e.g. set to 0 to halt update of visual stimuli, or to 1 to enable update.]]></Text>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
                    <rx:Name>MovementDeltaSwitch</rx:Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MovementDelta</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Gain" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0.01</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MovementDeltaSwitch</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="Add">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>-1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LeftPhaseProcession</Name>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="FloatProperty">
                      <Value>180</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>RightPhaseProcession</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="10" To="14" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Trial</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Sink">
                <Name>StartClosedLoop</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>1</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>MovementDeltaSwitch</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>WaitForThreshold</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>ThresholdDistance</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>SessionSettings</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Metadata.RunThreshold</Selector>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Value" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="GreaterThan">
                      <Operand xsi:type="DoubleProperty">
                        <Value>20</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="1" To="5" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source2" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="7" To="8" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Name>IsHalt</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>TrialTypeChoice</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="1" To="2" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>HaltDelay</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Trial</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>HaltProtocol.MinumumDelay</Selector>
                    </Expression>
                    <Expression xsi:type="scr:ExpressionTransform">
                      <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="DueTime" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="gl:Timer">
                        <gl:DueTime>PT1S</gl:DueTime>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Name>StillRunning</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>ThresholdDistance</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>SessionSettings</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Metadata.RunThreshold</Selector>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Value" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="GreaterThan">
                      <Operand xsi:type="DoubleProperty">
                        <Value>20</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="1" To="5" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source2" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>ApplyHalt</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>MovementDeltaSwitch</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Trial</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>HaltProtocol.HaltTime</Selector>
                    </Expression>
                    <Expression xsi:type="scr:ExpressionTransform">
                      <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="DueTime" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="gl:Timer">
                        <gl:DueTime>PT10S</gl:DueTime>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>1</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>MovementDeltaSwitch</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="7" To="8" Label="Source1" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="9" To="10" Label="Source1" />
                    <Edge From="10" To="11" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>TrialEnd</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>true</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>TrialFinished</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Name>NotRunning</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>ThresholdDistance</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>SessionSettings</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Metadata.RunThreshold</Selector>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Value" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="LessThanOrEqual">
                      <Operand xsi:type="DoubleProperty">
                        <Value>20</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="1" To="5" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source2" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>TrialEnd</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>true</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>TrialFinished</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Name>NotHalt</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>TrialTypeChoice</Name>
                    </Expression>
                    <Expression xsi:type="Equal">
                      <Operand xsi:type="BooleanProperty">
                        <Value>false</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>TrialEnd</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>true</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>TrialFinished</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Block</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TotalRuntime</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2M20S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Block timer elapsed</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ExperimentEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BlockFinished</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Block</Name>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>StartClosedLoop</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>MovementDeltaSwitch</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>TrialLoop</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MovementDelta</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Metadata.RunGain</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0.01</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Abs" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Block</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DecayTimestep</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Period" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                      <gl:Period>PT0.1S</gl:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Block</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RunThresholdDecay</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>-1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Scan">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Accumulation,Value</Selector>
                        </Expression>
                        <Expression xsi:type="Add" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:Rescale">
                            <dsp:Min>0</dsp:Min>
                            <dsp:Max>1000000</dsp:Max>
                            <dsp:RangeMin>0</dsp:RangeMin>
                            <dsp:RangeMax>1000000</dsp:RangeMax>
                            <dsp:RescaleType>Clamp</dsp:RescaleType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>ThresholdDistance</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>WaitForThreshold</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThresholdDistance</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Block</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RunThreshold</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>200</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Wait for run threshold...</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ExperimentEvents</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="5" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>DecideHalt</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ProbabilitySampling</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:Sample" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Block</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HaltProbability</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="LessThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0.5</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Check halt probability</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ExperimentEvents</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="6" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsHalt</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>HaltDelay</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Block</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HaltProtocol.MinumumDelay</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT0.1S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Halt delay</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ExperimentEvents</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>StillRunning</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThresholdDistance</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Block</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RunThreshold</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>200</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="5" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>ApplyHalt</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>MovementDeltaSwitch</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Block</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HaltProtocol.HaltTime</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT2S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Block</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HaltProtocol.HaltGain</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>MovementDeltaSwitch</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Apply halt</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ExperimentEvents</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="11" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>NotRunning</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThresholdDistance</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Block</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RunThreshold</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="LessThanOrEqual">
                          <Operand xsi:type="DoubleProperty">
                            <Value>200</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="5" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>NotRunning</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Not running, skipping halt</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ExperimentEvents</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>NotHalt</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>PerformNotHalt</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Perform not halt</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ExperimentEvents</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="17" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="16" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="19" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="23" To="30" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="25" To="28" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="32" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="32" Label="Source2" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source3" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="20" To="28" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="22" To="26" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:MouseWheel" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>MovementDelta</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="19" To="22" Label="Source1" />
      <Edge From="19" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>