<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:sleap="clr-namespace:Bonsai.Sleap;assembly=Bonsai.Sleap"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:VideoTexture">
              <gl:Name>VideoData2_1904-01-01T01-00-00</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>D:\TrialLogicTestData\20241125_Cohort1_rotation\Vestibular_mismatch_day1\B6J2723-2024-12-12T15-44-01\VideoData2\VideoData2_1904-01-01T01-00-00.avi</gl:FileName>
              <gl:FlipMode>Vertical</gl:FlipMode>
              <gl:FrameCount xsi:nil="true" />
              <gl:StartPosition>0</gl:StartPosition>
              <gl:BufferLength xsi:nil="true" />
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawVideo.bonsai">
        <TextureName>VideoData2_1904-01-01T01-00-00</TextureName>
        <PlaybackRate>0</PlaybackRate>
        <Loop>false</Loop>
        <Angle>0</Angle>
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <ScaleX>1</ScaleX>
        <ScaleY>1</ScaleY>
        <ShiftX>0</ShiftX>
        <ShiftY>0</ShiftY>
        <Layer>0</Layer>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:PredictPoseIdentities">
          <sleap:ModelFileName>Z:\SLEAP_models\models\frozen_model_singleinstance_n403\frozen_graph.pb</sleap:ModelFileName>
          <sleap:CentroidMinConfidence xsi:nil="true" />
          <sleap:IdentityMinConfidence xsi:nil="true" />
          <sleap:PartMinConfidence xsi:nil="true" />
          <sleap:ScaleFactor xsi:nil="true" />
          <sleap:ColorConversion xsi:nil="true" />
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>